CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your analysis.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module (optional) allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be extracted from the imageâx80x99s file name and/or location, or from an external file.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "channel_1") (file does contain "Max")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "channel_3") (file does contain "Max")
    Name to assign these images:Factin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "channel_2") (file does contain "Max")
    Name to assign these images:aSMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "channel_4") (file does contain "FAs")
    Name to assign these images:FAs
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module (optional) allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, separate time-lapse movies, 3D stacks, etc.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['IdentifyPrimaryObjects takes an input image and identifies biological objects of interest, for example nuclei from a DNA-stained image, or colonies on an agar plate.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:120
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    Thresholding method:Otsu

FilterObjects:[module_num:6|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enabled:False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
    Select the objects to filter:Nuclei
    Name the output objects:Filtered_Nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
EditObjectsManually:[module_num:7|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
    Select the objects to be edited:Nuclei
    Name the edited objects:Edited_Nuclei
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:DAPI
    Allow overlapping objects?:No

Threshold:[module_num:8|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
    Select the input image:Factin
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:9|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
    Select the input image:Factin
    Name the output image:Background
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:Yes

Watershed:[module_num:10|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
    Select the input image:Background
    Name the output object:backgroundarea
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureImageIntensity:[module_num:11|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
    Select images to measure:Factin
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:backgroundarea
    Calculate custom percentiles:No
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Factin
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:MaskBlue
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_Factin_backgroundarea

ImageMath:[module_num:13|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.4
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:inverted
    Image or measurement?:Image
    Select the first image:Factin
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:Edited_Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Factin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:400
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

FilterObjects:[module_num:15|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enabled:False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
    Select the objects to filter:Cells
    Name the output objects:Filtered_aSMA
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
EditObjectsManually:[module_num:16|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
    Select the objects to be edited:Cells
    Name the edited objects:Edited_factin
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Factin
    Allow overlapping objects?:No

Threshold:[module_num:17|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
    Select the input image:Factin
    Name the output image:Bin_factin
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

Morph:[module_num:18|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
    Select the input image:Factin
    Name the output image:Morph_factin
    Select the operation to perform:clean
    Number of times to repeat operation:Once
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
CorrectIlluminationCalculate:[module_num:19|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
    Select the input image:FAs
    Name the output image:IllumAct
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:20|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
    Select the input image:FAs
    Name the output image:CorrAct
    Select the illumination function:IllumAct
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Threshold:[module_num:21|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
    Select the input image:FAs
    Name the output image:Preliminary_FAs
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:00.13,0.14
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:3
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    Thresholding method:Otsu

MaskImage:[module_num:22|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
    Select the input image:Preliminary_FAs
    Name the output image:Masked_FAs
    Use objects or an image as a mask?:Objects
    Select object for mask:Edited_factin
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    Invert the mask?:No

ConvertImageToObjects:[module_num:23|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
    Select the input image:Masked_FAs
    Name the output object:Converted_FAs
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:24|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
    Select objects to be masked:Converted_FAs
    Name the masked objects:MaskDistFAs
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Edited_factin
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

FilterObjects:[module_num:25|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enabled:False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
    Select the objects to filter:MaskDistFAs
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectSkeleton:[module_num:26|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enabled:False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
    Select the seed objects:Edited_Nulei
    Select the skeletonized image:Morph_factin
    Retain the branchpoint image?:Yes
    Name the branchpoint image:Skeleton_factin
    Fill small holes?:Yes
    Maximum hole size:150
    Export the skeleton graph relationships?:Yes
    Intensity image:Morph_factin
    File output directory:Elsewhere...|O:\\Data\\Personnel\\Mirko_DUrso\\Ongoing_analysis\\FMMT\\14012023_nhDF_8D_lines and inhibitor\\8D_nhDF_20um_vin_aSMA
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ColorToGray:[module_num:27|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enabled:False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
    Select the input image:Skeleton_factin
    Conversion method:Combine
    Image type:RGB
    Name the output image:Skeleton_gray_aSMA
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
MeasureImageSkeleton:[module_num:28|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enabled:False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
    Select an image to measure:Skeleton_gray_aSMA

MeasureObjectSizeShape:[module_num:29|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
    Select object sets to measure:Converted_FAs, Edited_Nuclei, Edited_factin
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureImageAreaOccupied:[module_num:30|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Converted_FAs, Edited_Nuclei, Edited_factin

RelateObjects:[module_num:31|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enabled:False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
    Parent objects:Edited_Nulei
    Child objects:Converted_FAs
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Distance_FAs_Nuclei
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
FilterObjects:[module_num:32|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
    Select the objects to filter:Converted_FAs
    Name the output objects:FilterObjectsFAs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:Yes
    Maximum value:50
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
OverlayObjects:[module_num:33|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
    Input:FAs
    Name the output image:Overlay_Fas
    Objects:FilterObjectsFAs
    Opacity:0.4

OverlayOutlines:[module_num:34|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Factin
    Name the output image:OverlayOfAll
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#80FF00
    Select objects to display:FilterObjectsFAs
    Select outline color:cyan
    Select objects to display:Nuclei

MeasureObjectSizeShape:[module_num:35|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
    Select object sets to measure:Converted_FAs, Edited_Nuclei, Edited_factin, FilterObjectsFAs
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensityDistribution:[module_num:36|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enabled:False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
    Hidden:2
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:FilterObjectsFAs
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Edited_Nulei
    Select objects to measure:Edited_factin
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Edited_Nulei
    Scale the bins?:Yes
    Number of bins:10
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    Image:DAPI
    Objects to display:Edited_factin
    Number of bins:4
    Measurement:Fraction at Distance
    Color map:Blues
    Save display as image?:Yes
    Output image name:Heatmap_FAsToCells

SaveImages:[module_num:37|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Overlay_DAPI_Act
    Select method for constructing file names:From image filename
    Select image name for file prefix:Factin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:png
    Output file location:Same folder as image|C:\\Users\\20200582\\Desktop\\Mirko\\Exp\\InverseStain_Vin_asma_26102021\\sample1\\ctrl
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:38|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
    Select the type of image to save:Mask
    Select the image to save:Overlay_Fas
    Select method for constructing file names:From image filename
    Select image name for file prefix:FAs
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:
    Saved file format:png
    Output file location:Same folder as image|C:\\Users\\20200582\\Desktop\\Mirko\\Exp\\InverseStain_Vin_asma_26102021\\sample1\\ctrl
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:39|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|O:\\Data\\Personnel\\Mirko_DUrso\\Ongoing_analysis\\FMMT\\Rebuttal\\tgf
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Run_Timestamp,Experiment|Pipeline_Pipeline,Image|Threshold_OrigThreshold_Cells,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_GuideThreshold_Nuclei,Image|Threshold_GuideThreshold_Cells,Image|Threshold_FinalThreshold_Nuclei,Image|Threshold_FinalThreshold_Cells,Image|Threshold_SumOfEntropies_Cells,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_WeightedVariance_Cells,Image|ModuleError_01Images,Image|ModuleError_04Groups,Image|ModuleError_02Metadata,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MorphoAnalysis
    Overwrite existing files without warning?:No
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